def model Hinch_et_al_2004 as
  def unit per_ms as
    unit second {expo: -1, pref: milli};
  enddef;
  def unit ms as
    unit second {pref: milli};
  enddef;
  def unit mV as
    unit volt {pref: milli};
  enddef;
  def unit mM as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit mM_per_ms as
    unit mM;
    unit second {expo: -1, pref: milli};
  enddef;
  def unit per_mM_ms as
    unit mM {expo: -1};
    unit second {expo: -1, pref: milli};
  enddef;
  def unit mM_per_mV_ms as
    unit mM;
    unit second {expo: -1, pref: milli};
    unit volt {expo: -1, pref: milli};
  enddef;
  def unit per_ms3 as
    unit second {expo: -3, pref: milli};
  enddef;
  def unit um2 as
    unit meter {expo: 2, pref: micro};
  enddef;
  def unit um3 as
    unit meter {expo: 3, pref: micro};
  enddef;
  def unit um3_per_ms as
    unit meter {expo: 3, pref: micro};
    unit second {expo: -1, pref: milli};
  enddef;
  def unit um3_mM_per_ms as
    unit meter {expo: 3, pref: micro};
    unit mM;
    unit second {expo: -1, pref: milli};
  enddef;
  def unit mJ_per_mole_K as
    unit joule {pref: milli};
    unit mole {expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit C_per_mole as
    unit coulomb;
    unit mole {expo: -1};
  enddef;

  def comp environment as
    var time: ms {pub: out};
  enddef;

  def comp cellGeo as
    var V_myo: um3 {init: 2.61, pub: out};
    // Volume of cytosol (25.84e3) replace with volume of sphere (2.61)
    var V_SR: um3 {init: 0.212, pub: out};
    // Total volume of SR (2.098e3) scale by same factor as V_myo (0.212)? Or conc near nuc?
    var A_cap: um2 {init: 1.534e4, pub: out};
    // Check this is initially 0
    var compartmentType: dimensionless {init: 1, pub: out};
  enddef;

  def comp membrane as
    var V: mV {pub: out};
    var R: mJ_per_mole_K {init: 8314.5, pub: out};
    var T: kelvin {init: 295, pub: out};
    var F: C_per_mole {init: 96487, pub: out};
    var time: ms {pub: in};
    var FVRT: dimensionless {pub: out};
    var FVRT_Ca: dimensionless {pub: out};
    FVRT = F*V/(R*T);
    FVRT_Ca = 2{dimensionless}*FVRT;
    V = sel
      case (time >= 0{ms}) and (time <= 200{ms}):
        0{mV};
      otherwise:
        -80{mV};
    endsel;
  enddef;

  def comp CaRU as
    var g_D: um3_per_ms {init: 0.065, priv: out};
    var J_R: um3_per_ms {init: 0.02, priv: out};
    var J_L: um3_per_ms {init: 9.13e-4, priv: out};
    var V_myo: um3 {priv: out, pub: in};
    var N: dimensionless {init: 7, priv: out};
    // Number of LCCs -> estimated as 4*# of CaRUs, orig 50000
    var V: mV {priv: out, pub: in};
    var Ca_i: mM {priv: out, pub: in};
    var Ca_o: mM {priv: out, pub: in};
    var Ca_SR: mM {priv: out, pub: in};
    var time: ms {priv: out, pub: in};
    var FVRT_Ca: dimensionless {priv: out, pub: in};
    var I_RyR: mM_per_ms {priv: in, pub: out};
    var I_LCC: mM_per_ms {priv: in, pub: out};
  enddef;

  def comp CaRU_Transitions as
    var V: mV {pub: in};
    var C_oc: mM {pub: in};
    var C_co: mM {pub: in};
    var Ca_i: mM {pub: in};
    var V_L: mV {init: -2};
    var del_VL: mV {init: 7};
    var phi_L: dimensionless {init: 2.35};
    var t_L: ms {init: 1};
    var tau_L: ms {init: 650};
    var t_R: ms;
    var tau_R: ms {init: 2.43};
    var phi_R: dimensionless {init: 0.05};
    var theta_R: dimensionless {init: 0.012};
    var K_RyR: mM {init: 41e-3};
    var K_L: mM {init: 0.22e-3};
    var a: dimensionless {init: 0.0625};
    var b: dimensionless {init: 14};
    var c: dimensionless {init: 0.01};
    var d: dimensionless {init: 100};
    var expVL: dimensionless;
    var alpha_p: per_ms {pub: out};
    var alpha_m: per_ms {pub: out};
    var beta_poc: per_ms {pub: out};
    var beta_pcc: per_ms {pub: out};
    var beta_m: per_ms {pub: out};
    var epsilon_pco: per_ms {pub: out};
    var epsilon_pcc: per_ms {pub: out};
    var epsilon_m: per_ms {pub: out};
    var mu_poc: per_ms {pub: out};
    var mu_pcc: per_ms {pub: out};
    var mu_moc: per_ms {pub: out};
    var mu_mcc: per_ms {pub: out};
    expVL = exp((V-V_L)/del_VL);
    t_R = 1.17{dimensionless}*t_L;
    alpha_p = expVL/(t_L*(expVL+1{dimensionless}));
    alpha_m = phi_L/t_L;
    beta_poc = sqr(C_oc)/(t_R*(sqr(C_oc)+sqr(K_RyR)));
    beta_pcc = sqr(Ca_i)/(t_R*(sqr(Ca_i)+sqr(K_RyR)));
    beta_m = phi_R/t_R;
    epsilon_pco = C_co*(expVL+a)/(tau_L*K_L*(expVL+1{dimensionless}));
    epsilon_pcc = Ca_i*(expVL+a)/(tau_L*K_L*(expVL+1{dimensionless}));
    epsilon_m = b*(expVL+a)/(tau_L*(b*expVL+a));
    mu_poc = (sqr(C_oc)+c*sqr(K_RyR))/(tau_R*(sqr(C_oc)+sqr(K_RyR)));
    mu_pcc = (sqr(Ca_i)+c*sqr(K_RyR))/(tau_R*(sqr(Ca_i)+sqr(K_RyR)));
    mu_moc = theta_R*d*(sqr(C_oc)+c*sqr(K_RyR))/(tau_R*(d*sqr(C_oc)+c*sqr(K_RyR)));
    mu_mcc = theta_R*d*(sqr(Ca_i)+c*sqr(K_RyR))/(tau_R*(d*sqr(Ca_i)+c*sqr(K_RyR)));
  enddef;

  def comp DS_Calcium_Concentrations as
    var Ca_i: mM {pub: in};
    var Ca_SR: mM {pub: in};
    var Ca_o: mM {pub: in};
    var FVRT_Ca: dimensionless {pub: in};
    var g_D: um3_per_ms {pub: in};
    var J_R: um3_per_ms {pub: in};
    var J_L: um3_per_ms {pub: in};
    var C_cc: mM {pub: out};
    var C_oc: mM {pub: out};
    var C_co: mM {pub: out};
    var C_oo: mM {pub: out};
    C_cc = Ca_i;
    C_co = (Ca_i+J_R/g_D*Ca_SR)/(1{dimensionless}+J_R/g_D);
    C_oc = sel
      case abs(FVRT_Ca) > 0.000000001{dimensionless}:
        (Ca_i+J_L/g_D*Ca_o*FVRT_Ca*exp(-FVRT_Ca)/(1{dimensionless}-exp(-FVRT_Ca)))/(1{dimensionless}+J_L/g_D*FVRT_Ca/(1{dimensionless}-exp(-FVRT_Ca)));
      otherwise:
        (Ca_i+J_L/g_D*Ca_o)/(1{dimensionless}+J_L/g_D);
    endsel;
    C_oo = sel
      case abs(FVRT_Ca) > 0.000000001{dimensionless}:
        (Ca_i+J_R/g_D*Ca_SR+J_L/g_D*Ca_o*FVRT_Ca*exp(-FVRT_Ca)/(1{dimensionless}-exp(-FVRT_Ca)))/(1{dimensionless}+J_R/g_D+J_L/g_D*FVRT_Ca/(1{dimensionless}-exp(-FVRT_Ca)));
      otherwise:
        (Ca_i+J_R/g_D*Ca_SR+J_L/g_D*Ca_o)/(1{dimensionless}+J_R/g_D+J_L/g_D);
    endsel;
  enddef;

  def comp LCC_and_RyR_fluxes as
    var g_D: um3_per_ms {pub: in};
    var J_R: um3_per_ms {pub: in};
    var J_L: um3_per_ms {pub: in};
    var Ca_i: mM {pub: in};
    var Ca_SR: mM {pub: in};
    var Ca_o: mM {pub: in};
    var FVRT_Ca: dimensionless {pub: in};
    var J_Loo: um3_mM_per_ms {pub: out};
    var J_Loc: um3_mM_per_ms {pub: out};
    var J_Rco: um3_mM_per_ms {pub: out};
    var J_Roo: um3_mM_per_ms {pub: out};
    J_Rco = J_R*(Ca_SR-Ca_i)/(1{dimensionless}+J_R/g_D);
    J_Roo = sel
      case abs(FVRT_Ca) > 0.00001{dimensionless}:
        J_R*(Ca_SR-Ca_i+J_L/g_D*FVRT_Ca/(1{dimensionless}-exp(-FVRT_Ca))*(Ca_SR-Ca_o*exp(-FVRT_Ca)))/(1{dimensionless}+J_R/g_D+J_L/g_D*FVRT_Ca/(1{dimensionless}-exp(-FVRT_Ca)));
      otherwise:
        J_R*(Ca_SR-Ca_i+J_L/g_D*0.00001{dimensionless}/(1{dimensionless}-exp(-0.00001{dimensionless}))*(Ca_SR-Ca_o*exp(-0.00001{dimensionless})))/(1{dimensionless}+J_R/g_D+J_L/g_D*0.00001{dimensionless}/(1{dimensionless}-exp(-0.00001{dimensionless})));
    endsel;
    J_Loc = sel
      case abs(FVRT_Ca) > 0.00001{dimensionless}:
        J_L*FVRT_Ca/(1{dimensionless}-exp(-FVRT_Ca))*(Ca_o*exp(-FVRT_Ca)-Ca_i)/(1{dimensionless}+J_L/g_D*FVRT_Ca/(1{dimensionless}-exp(-FVRT_Ca)));
      otherwise:
        J_L*0.00001{dimensionless}/(1{dimensionless}-exp(-0.00001{dimensionless}))*(Ca_o*exp(-0.00001{dimensionless})-Ca_i)/(1{dimensionless}+J_L/g_D*0.00001{dimensionless}/(1{dimensionless}-exp(-0.00001{dimensionless})));
    endsel;
    J_Loo = sel
      case abs(FVRT_Ca) > 0.00001{dimensionless}:
        J_L*FVRT_Ca/(1{dimensionless}-exp(-FVRT_Ca))*(Ca_o*exp(-FVRT_Ca)-Ca_i+J_R/g_D*(Ca_o*exp(-FVRT_Ca)-Ca_SR))/(1{dimensionless}+J_R/g_D+J_L/g_D*FVRT_Ca/(1{dimensionless}-exp(FVRT_Ca)));
      otherwise:
        J_L*0.00001{dimensionless}/(1{dimensionless}-exp(-0.00001{dimensionless}))*(Ca_o*exp(-0.00001{dimensionless})-Ca_i+J_R/g_D*(Ca_o*exp(-0.00001{dimensionless})-Ca_SR))/(1{dimensionless}+J_R/g_D+J_L/g_D*0.00001{dimensionless}/(1{dimensionless}-exp(-0.00001{dimensionless})));
    endsel;
  enddef;

  def comp CaRU_states as
    var alpha_p: per_ms {pub: in};
    var alpha_m: per_ms {pub: in};
    var beta_pcc: per_ms {pub: in};
    var beta_poc: per_ms {pub: in};
    var beta_m: per_ms {pub: in};
    var denom: per_ms3;
    var y_oc: dimensionless {pub: out};
    var y_co: dimensionless {pub: out};
    var y_oo: dimensionless {pub: out};
    var y_cc: dimensionless {pub: out};
    var y_ci: dimensionless {pub: out};
    var y_oi: dimensionless {pub: out};
    var y_ic: dimensionless {pub: out};
    var y_io: dimensionless {pub: out};
    var y_ii: dimensionless {pub: out};
    denom = (alpha_p+alpha_m)*((alpha_m+beta_m+beta_poc)*(beta_m+beta_pcc)+alpha_p*(beta_m+beta_poc));
    y_oc = alpha_p*beta_m*(alpha_p+alpha_m+beta_m+beta_pcc)/denom;
    y_co = alpha_m*(beta_pcc*(alpha_m+beta_m+beta_poc)+beta_poc*alpha_p)/denom;
    y_oo = alpha_p*(beta_poc*(alpha_p+beta_m+beta_pcc)+beta_pcc*alpha_m)/denom;
    y_cc = alpha_m*beta_m*(alpha_m+alpha_p+beta_m+beta_poc)/denom;
    y_ci = alpha_m/(alpha_p+alpha_m);
    y_oi = alpha_p/(alpha_p+alpha_m);
    y_ic = beta_m/(beta_pcc+beta_m);
    y_io = beta_pcc/(beta_pcc+beta_m);
    y_ii = 1{dimensionless}-y_oc-y_co-y_oo-y_cc-y_ci-y_ic-y_oi-y_io;
  enddef;

  def comp CaRU_red_stat as
    var y_oc: dimensionless {pub: in};
    var y_cc: dimensionless {pub: in};
    var y_co: dimensionless {pub: in};
    var alpha_p: per_ms {pub: in};
    var alpha_m: per_ms {pub: in};
    var beta_pcc: per_ms {pub: in};
    var beta_m: per_ms {pub: in};
    var epsilon_pco: per_ms {pub: in};
    var epsilon_pcc: per_ms {pub: in};
    var epsilon_m: per_ms {pub: in};
    var mu_poc: per_ms {pub: in};
    var mu_pcc: per_ms {pub: in};
    var mu_moc: per_ms {pub: in};
    var mu_mcc: per_ms {pub: in};
    var r_1: per_ms {pub: out};
    var r_2: per_ms {pub: out};
    var r_3: per_ms {pub: out};
    var r_4: per_ms {pub: out};
    var r_5: per_ms {pub: out};
    var r_6: per_ms {pub: out};
    var r_7: per_ms {pub: out};
    var r_8: per_ms {pub: out};
    var z_one: dimensionless {init: 0.98859, pub: out};
    var z_two: dimensionless {init: 0.0087302, pub: out};
    var z_thr: dimensionless {init: 0.0026566, pub: out};
    var z_4: dimensionless {pub: out};
    var time: ms {pub: in};
    var compartmentType: dimensionless {pub: in};
    r_1 = y_oc*mu_poc+y_cc*mu_pcc;
    r_2 = (alpha_p*mu_moc+alpha_m*mu_mcc)/(alpha_p+alpha_m);
    r_3 = beta_m*mu_pcc/(beta_m+beta_pcc);
    r_4 = mu_mcc;
    r_5 = y_co*epsilon_pco+y_cc*epsilon_pcc;
    r_6 = epsilon_m;
    r_7 = alpha_m*epsilon_pcc/(alpha_p+alpha_m);
    r_8 = epsilon_m;
    z_4 = 1{dimensionless}-z_one-z_two-z_thr;
    ode(z_one, time) = sel
      case compartmentType == 0{dimensionless}:
        -(r_1+r_5)*z_one+r_2*z_two+r_6*z_thr;
      case compartmentType == 1{dimensionless}:
        0{dimensionless};
      case compartmentType == 2{dimensionless}:
        0{dimensionless};
    endsel;
    ode(z_two, time) = sel
      case compartmentType == 0{dimensionless}:
        r_1*z_one-(r_2+r_7)*z_two+r_8*z_4;
      case compartmentType == 1{dimensionless}:
        0{dimensionless};
      case compartmentType == 2{dimensionless}:
        0{dimensionless};
    endsel;
    ode(z_thr, time) = sel
      case compartmentType == 0{dimensionless}:
        r_5*z_one-(r_6+r_3)*z_thr+r_4*z_4;
      case compartmentType == 1{dimensionless}:
        0{dimensionless};
      case compartmentType == 2{dimensionless}:
        0{dimensionless};
    endsel;
  enddef;

  def comp RyR_current as
    var y_oo: dimensionless {pub: in};
    var y_co: dimensionless {pub: in};
    var y_oc: dimensionless {pub: in};
    var beta_pcc: per_ms {pub: in};
    var beta_m: per_ms {pub: in};
    var J_Roo: um3_mM_per_ms {pub: in};
    var J_Rco: um3_mM_per_ms {pub: in};
    var z_one: dimensionless {pub: in};
    var z_thr: dimensionless {pub: in};
    var V_myo: um3 {pub: in};
    var N: dimensionless {pub: in};
    var J_R1: um3_mM_per_ms {pub: out};
    var J_R3: um3_mM_per_ms {pub: out};
    var I_RyR: mM_per_ms {pub: out};
    J_R1 = y_oo*J_Roo+J_Rco*y_co;
    J_R3 = J_Rco*beta_pcc/(beta_m+beta_pcc);
    I_RyR = (z_one*J_R1+z_thr*J_R3)*N/V_myo;
  enddef;

  def comp LCC_current as
    var y_oo: dimensionless {pub: in};
    var y_oc: dimensionless {pub: in};
    var alpha_p: per_ms {pub: in};
    var alpha_m: per_ms {pub: in};
    var J_Loo: um3_mM_per_ms {pub: in};
    var J_Loc: um3_mM_per_ms {pub: in};
    var z_one: dimensionless {pub: in};
    var z_two: dimensionless {pub: in};
    var V_myo: um3 {pub: in};
    var N: dimensionless {pub: in};
    var J_L1: um3_mM_per_ms {pub: out};
    var J_L2: um3_mM_per_ms {pub: out};
    var I_LCC: mM_per_ms {pub: out};
    J_L1 = J_Loo*y_oo+J_Loc*y_oc;
    J_L2 = J_Loc*alpha_p/(alpha_p+alpha_m);
    I_LCC = (z_one*J_L1+z_two*J_L2)*N/V_myo;
  enddef;

  def comp Na_Ca_Exchanger as
    var FVRT: dimensionless {pub: in};
    var K_mNa: mM {init: 87.5};
    var K_mCa: mM {init: 1.38};
    var eta: dimensionless {init: 0.35};
    var k_sat: dimensionless {init: 0.1};
    var g_NCX: mM_per_ms {init: 38.5e-3};
    var Na_i: mM {pub: in};
    var Na_o: mM {pub: in};
    var Ca_i: mM {pub: in};
    var Ca_o: mM {pub: in};
    var I_NaCa: mM_per_ms {pub: out};
    I_NaCa = 0{dimensionless};
    // g_NCX*(exp(eta*FVRT)*pow(Na_i, 3{dimensionless})*Ca_o-exp((eta-1{dimensionless})*FVRT)*pow(Na_o, 3{dimensionless})*Ca_i)/((pow(Na_o, 3{dimensionless})+pow(K_mNa, 3{dimensionless}))*(Ca_o+K_mCa)*(1{dimensionless}+k_sat*exp((eta-1{dimensionless})*FVRT)));
  enddef;

  def comp SERCA as
    var g_SERCA: mM_per_ms {init: 0.45e-3};
    var K_SERCA: mM {init: 0.5e-3};
    var I_SERCA: mM_per_ms {pub: out};
    var Ca_i: mM {pub: in};
    I_SERCA = g_SERCA*sqr(Ca_i)/(sqr(K_SERCA)+sqr(Ca_i));
  enddef;

  def comp Sarcolemmal_Ca_pump as
    var g_pCa: mM_per_ms {init: 0.0035e-3};
    var K_mpCa: mM {init: 0.5e-3};
    var Ca_i: mM {pub: in};
    var I_pCa: mM_per_ms {pub: out};
    I_pCa = g_pCa*Ca_i/(K_mpCa+Ca_i);
  enddef;
  // Hinch chose the value of I_CaB so that Ca_i=0.1 when the cell is at equilliubrium
  // Change the value accordingly

  def comp Background_Ca_current as
    var V: mV {pub: in};
    var R: mJ_per_mole_K {pub: in};
    var T: kelvin {pub: in};
    var F: C_per_mole {pub: in};
    var Ca_i: mM {pub: in};
    var Ca_o: mM {pub: in};
    var E_Ca: mV {pub: out};
    var g_CaB: mM_per_mV_ms {init: 1.8e-8};
    var I_CaB: mM_per_ms {pub: out};
    // Originally, g_CaB = 2.6875e-8
    E_Ca = R*T/(2{dimensionless}*F)*ln(Ca_o/Ca_i);
    I_CaB = g_CaB*(E_Ca-V);
  enddef;

  def comp SR_Ca_leak_current as
    var Ca_i: mM {pub: in};
    var Ca_SR: mM {pub: in};
    var g_SRl: per_ms {init: 1.8951e-5};
    var I_SR: mM_per_ms {pub: out};
    I_SR = g_SRl*(Ca_SR-Ca_i);
  enddef;

  def comp troponin_Ca_buffer as
    var k_m_TRPN: per_ms {init: 0.04};
    var k_p_TRPN: per_mM_ms {init: 0.04e3};
    var B_TRPN: mM {init: 70e-3};
    var TRPN: mM {pub: in};
    var Ca_i: mM {pub: in};
    var I_TRPN: mM_per_ms {pub: out};
    I_TRPN = k_m_TRPN*(B_TRPN-TRPN)-k_p_TRPN*TRPN*Ca_i;
  enddef;

  def comp fluo_buffer as
    var k_fluoOff: per_ms {init: 13.8};
    var k_fluoOn: per_mM_ms {init: 0.04e3};
    var Fluo: mM {pub: in};
    var Ca_i: mM {pub: in};
    var I_fluo: mM_per_ms {pub: out};
    var CaFluo: mM {pub: in};
    I_fluo = k_fluoOff*CaFluo-k_fluoOn*Ca_i*Fluo;
  enddef;

  def comp nuc_Ca_buffer as
    var Ca_i: mM {pub: in};
    var k_nucsoff: per_ms {init: 0.04};
    var k_nucson: per_mM_ms {init: 0.04e3};
    var B_totnucs: mM {init: 70e-3};
    var B_nucs: mM {pub: in};
    var I_nucbufs: mM_per_ms {pub: out};
    var k_nucmoff: per_ms {init: 0.04};
    var k_nucmon: per_mM_ms {init: 0.04e3};
    var B_nucm: mM {pub: in};
    var I_nucbufm: mM_per_ms {pub: out};
    var CaB_nucm: mM {pub: in};
    I_nucbufs = k_nucson*(B_totnucs-B_nucs)-k_nucsoff*Ca_i*B_nucs;
    I_nucbufm = k_nucmon*CaB_nucm-k_nucmoff*Ca_i*B_nucm;
  enddef;

  def comp calmodulin_Ca_buffer as
    var k_CMDN: mM {init: 2.382e-3};
    var B_CMDN: mM {init: 50e-3};
    var Ca_i: mM {pub: in};
    var beta_CMDN: dimensionless {pub: out};
    beta_CMDN = pow(1{dimensionless}+k_CMDN*B_CMDN/sqr(k_CMDN+Ca_i), -1{dimensionless});
  enddef;

  def comp intracell as
    var Na_i: mM {init: 10, pub: out};
    var Ca_i: mM {init: 0.0001, pub: out};
    var Ca_SR: mM {init: 700e-3, pub: out};
    var TRPN: mM {init: 0.0636364, pub: out};
    var time: ms {pub: in};
    var V_myo: um3 {pub: in};
    var V_SR: um3 {pub: in};
    var beta_CMDN: dimensionless {pub: in};
    var I_SERCA: mM_per_ms {pub: in};
    var I_pCa: mM_per_ms {pub: in};
    var I_CaB: mM_per_ms {pub: in};
    var I_TRPN: mM_per_ms {pub: in};
    var I_SR: mM_per_ms {pub: in};
    var I_NaCa: mM_per_ms {pub: in};
    var I_RyR: mM_per_ms {pub: in};
    var I_LCC: mM_per_ms {pub: in};
    var CaSR_plot: mM;
    var compartmentType: dimensionless {pub: in};
    var Fluo: mM {init: 0.002, pub: out};
    var CaFluo: mM {init: 0, pub: out};
    var I_fluo: mM_per_ms {pub: in};
    var B_nucm: mM {init: 0.0, pub: out};
    // 0.065
    var CaB_nucm: mM {init: 0.00, pub: out};
    var I_nucbufm: mM_per_ms {pub: in};
    var B_nucs: mM {init: 0.07, pub: out};
    // 0.07
    var I_nucbufs: mM_per_ms {pub: in};
    ode(Fluo, time) = I_fluo;
    ode(CaFluo, time) = -I_fluo;
    ode(TRPN, time) = sel
      case compartmentType == 0{dimensionless}:
        I_TRPN;
      case compartmentType == 1{dimensionless}:
        I_TRPN;
      case compartmentType == 2{dimensionless}:
        0{dimensionless};
    endsel;
    ode(B_nucm, time) = sel
      case compartmentType == 0{dimensionless}:
        0{dimensionless};
      case compartmentType == 1{dimensionless}:
        0{dimensionless};
      case compartmentType == 2{dimensionless}:
        I_nucbufm;
    endsel;
    ode(CaB_nucm, time) = sel
      case compartmentType == 0{dimensionless}:
        0{dimensionless};
      case compartmentType == 1{dimensionless}:
        0{dimensionless};
      case compartmentType == 2{dimensionless}:
        -I_nucbufm;
    endsel;
    ode(B_nucs, time) = sel
      case compartmentType == 0{dimensionless}:
        0{dimensionless};
      case compartmentType == 1{dimensionless}:
        0{dimensionless};
      case compartmentType == 2{dimensionless}:
        I_nucbufs;
    endsel;
    // Removed pCa and NaCa terms (Ca transported out of cell)
    // Separated SERCA from dyad
    //                beta_CMDN*(I_LCC+I_RyR-I_SERCA+I_SR+I_NaCa-I_pCa+I_CaB+I_TRPN);
    // beta_nuc*I_nucbuf;
    // 0{dimensionless};
    ode(Ca_i, time) = sel
      case compartmentType == 0{dimensionless}:
        beta_CMDN*(I_LCC+I_RyR-I_SERCA+I_SR+I_CaB+I_TRPN+I_fluo);
      case compartmentType == 1{dimensionless}:
        beta_CMDN*(-I_SERCA+I_SR+I_CaB+I_TRPN+I_fluo);
      case compartmentType == 2{dimensionless}:
        -I_nucbufs-I_nucbufm+I_fluo;
    endsel;
    ode(Ca_SR, time) = sel
      case compartmentType == 0{dimensionless}:
        V_myo/V_SR*(-I_RyR+I_SERCA-I_SR);
      case compartmentType == 1{dimensionless}:
        V_myo/V_SR*(I_SERCA-I_SR);
      case compartmentType == 2{dimensionless}:
        0{dimensionless};
    endsel;
    CaSR_plot = Ca_SR*V_SR/V_myo;
  enddef;

  def comp extracellular_ion_concentrations as
    var Na_o: mM {init: 140, pub: out};
    var Ca_o: mM {init: 1, pub: out};
  enddef;

  def group as containment for
    comp membrane incl
      comp intracell;
      comp extracellular_ion_concentrations;
      comp cellGeo;
      comp CaRU incl
        comp CaRU_Transitions;
        comp CaRU_states;
        comp CaRU_red_stat;
        comp DS_Calcium_Concentrations;
        comp LCC_and_RyR_fluxes;
        comp RyR_current;
        comp LCC_current;
      endcomp;
      comp Na_Ca_Exchanger;
      comp SERCA;
      comp Sarcolemmal_Ca_pump;
      comp Background_Ca_current;
      comp SR_Ca_leak_current;
      comp troponin_Ca_buffer;
      comp calmodulin_Ca_buffer;
    endcomp;
  enddef;

  def group as encapsulation for
    comp CaRU incl
      comp CaRU_Transitions;
      comp CaRU_states;
      comp CaRU_red_stat;
      comp DS_Calcium_Concentrations;
      comp LCC_and_RyR_fluxes;
      comp RyR_current;
      comp LCC_current;
    endcomp;
  enddef;
  def map between environment and membrane for
    vars time and time;
  enddef;
  def map between environment and CaRU for
    vars time and time;
  enddef;
  def map between environment and intracell for
    vars time and time;
  enddef;
  def map between cellGeo and CaRU for
    vars V_myo and V_myo;
  enddef;
  def map between CaRU and CaRU_red_stat for
    vars time and time;
  enddef;
  def map between CaRU and LCC_and_RyR_fluxes for
    vars g_D and g_D;
    vars J_R and J_R;
    vars J_L and J_L;
    vars Ca_i and Ca_i;
    vars Ca_SR and Ca_SR;
    vars Ca_o and Ca_o;
    vars FVRT_Ca and FVRT_Ca;
  enddef;
  def map between membrane and CaRU for
    vars V and V;
    vars FVRT_Ca and FVRT_Ca;
  enddef;
  def map between CaRU and CaRU_Transitions for
    vars V and V;
    vars Ca_i and Ca_i;
  enddef;
  def map between CaRU_Transitions and CaRU_states for
    vars alpha_p and alpha_p;
    vars alpha_m and alpha_m;
    vars beta_pcc and beta_pcc;
    vars beta_poc and beta_poc;
    vars beta_m and beta_m;
  enddef;
  def map between CaRU_Transitions and RyR_current for
    vars beta_pcc and beta_pcc;
    vars beta_m and beta_m;
  enddef;
  def map between CaRU_Transitions and LCC_current for
    vars alpha_p and alpha_p;
    vars alpha_m and alpha_m;
  enddef;
  def map between CaRU_states and RyR_current for
    vars y_oo and y_oo;
    vars y_co and y_co;
    vars y_oc and y_oc;
  enddef;
  def map between CaRU_states and LCC_current for
    vars y_oo and y_oo;
    vars y_oc and y_oc;
  enddef;
  def map between LCC_and_RyR_fluxes and RyR_current for
    vars J_Roo and J_Roo;
    vars J_Rco and J_Rco;
  enddef;
  def map between LCC_and_RyR_fluxes and LCC_current for
    vars J_Loo and J_Loo;
    vars J_Loc and J_Loc;
  enddef;
  def map between CaRU_red_stat and RyR_current for
    vars z_one and z_one;
    vars z_thr and z_thr;
  enddef;
  def map between CaRU_red_stat and LCC_current for
    vars z_one and z_one;
    vars z_two and z_two;
  enddef;
  def map between DS_Calcium_Concentrations and CaRU_Transitions for
    vars C_oc and C_oc;
    vars C_co and C_co;
  enddef;
  def map between CaRU_Transitions and CaRU_red_stat for
    vars alpha_p and alpha_p;
    vars alpha_m and alpha_m;
    vars beta_pcc and beta_pcc;
    vars beta_m and beta_m;
    vars epsilon_pco and epsilon_pco;
    vars epsilon_pcc and epsilon_pcc;
    vars epsilon_m and epsilon_m;
    vars mu_poc and mu_poc;
    vars mu_pcc and mu_pcc;
    vars mu_moc and mu_moc;
    vars mu_mcc and mu_mcc;
  enddef;
  def map between CaRU_states and CaRU_red_stat for
    vars y_oc and y_oc;
    vars y_cc and y_cc;
    vars y_co and y_co;
  enddef;
  def map between CaRU and DS_Calcium_Concentrations for
    vars g_D and g_D;
    vars J_R and J_R;
    vars J_L and J_L;
    vars Ca_i and Ca_i;
    vars Ca_o and Ca_o;
    vars Ca_SR and Ca_SR;
    vars FVRT_Ca and FVRT_Ca;
  enddef;
  def map between CaRU and RyR_current for
    vars V_myo and V_myo;
    vars N and N;
    vars I_RyR and I_RyR;
  enddef;
  def map between CaRU and LCC_current for
    vars V_myo and V_myo;
    vars N and N;
    vars I_LCC and I_LCC;
  enddef;
  def map between intracell and CaRU for
    vars Ca_i and Ca_i;
    vars Ca_SR and Ca_SR;
    vars I_RyR and I_RyR;
    vars I_LCC and I_LCC;
  enddef;
  def map between extracellular_ion_concentrations and CaRU for
    vars Ca_o and Ca_o;
  enddef;
  def map between intracell and Na_Ca_Exchanger for
    vars Na_i and Na_i;
    vars Ca_i and Ca_i;
    vars I_NaCa and I_NaCa;
  enddef;
  def map between extracellular_ion_concentrations and Na_Ca_Exchanger for
    vars Na_o and Na_o;
    vars Ca_o and Ca_o;
  enddef;
  def map between membrane and Na_Ca_Exchanger for
    vars FVRT and FVRT;
  enddef;
  def map between intracell and SERCA for
    vars Ca_i and Ca_i;
    vars I_SERCA and I_SERCA;
  enddef;
  def map between intracell and Sarcolemmal_Ca_pump for
    vars Ca_i and Ca_i;
    vars I_pCa and I_pCa;
  enddef;
  def map between intracell and Background_Ca_current for
    vars Ca_i and Ca_i;
    vars I_CaB and I_CaB;
  enddef;
  def map between extracellular_ion_concentrations and Background_Ca_current for
    vars Ca_o and Ca_o;
  enddef;
  def map between membrane and Background_Ca_current for
    vars F and F;
    vars T and T;
    vars R and R;
    vars V and V;
  enddef;
  def map between intracell and SR_Ca_leak_current for
    vars Ca_i and Ca_i;
    vars Ca_SR and Ca_SR;
    vars I_SR and I_SR;
  enddef;
  def map between intracell and troponin_Ca_buffer for
    vars Ca_i and Ca_i;
    vars TRPN and TRPN;
    vars I_TRPN and I_TRPN;
  enddef;
  def map between intracell and nuc_Ca_buffer for
    vars Ca_i and Ca_i;
    vars B_nucs and B_nucs;
    vars B_nucm and B_nucm;
    vars I_nucbufs and I_nucbufs;
    vars I_nucbufm and I_nucbufm;
    vars CaB_nucm and CaB_nucm;
  enddef;
  def map between intracell and fluo_buffer for
    vars Ca_i and Ca_i;
    vars Fluo and Fluo;
    vars I_fluo and I_fluo;
    vars CaFluo and CaFluo;
  enddef;
  def map between intracell and calmodulin_Ca_buffer for
    vars Ca_i and Ca_i;
    vars beta_CMDN and beta_CMDN;
  enddef;
  def map between cellGeo and intracell for
    vars V_myo and V_myo;
    vars V_SR and V_SR;
    vars compartmentType and compartmentType;
  enddef;
  def map between cellGeo and CaRU_red_stat for
    vars compartmentType and compartmentType;
  enddef;
enddef;
